graphs:

  - id: Broker
    nodes:
    - id: proxy
      module: timeflux.nodes.zmq
      class: Broker

  - id: OpenBCI
    nodes:
    - id: acquire
      module: timeflux_openbci.nodes.driver
      class: OpenBCI
      params:
        board: ganglion
        serial_port: /dev/cu.usbmodem11
        debug: false
    - id: bandpass
      module: timeflux_dsp.nodes.filters
      class: IIRFilter
      params:
        rate: 250
        order: 3
        frequencies: [1, 40]
    - id: pub_openbci
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: openbci
    # Send to an external application
    - id: OSC
      module: timeflux.nodes.osc
      class: Client
      params:
        address: /alpha
    edges:
    - source: acquire
      target: bandpass
    - source: bandpass
      target: pub_openbci
    - source: bandpass
      target: OSC
    rate: 10

  - id: Monitor
    nodes:
    - id: sub
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [ openbci ]
    - id: ui
      module: timeflux_ui.nodes.ui
      class: UI
    edges:
      - source: sub:openbci
        target: ui:openbci
      - source: sub:detector
        target: ui:detector
    rate: 10


  # Channel 1 UP detector
  - id: Out_up
    nodes:
    - id: sub
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [ openbci ]

    - id: select
      module: timeflux.nodes.query
      class: LocQuery
      params:
        key: [ eeg_1 ]
        axis: 1

    - id: peaks
      module: timeflux_dsp.nodes.peaks
      class: LocalDetect
      params:
        delta: 100
        tol: 0.5

    - id: display
      module: timeflux.nodes.debug
      class: Display
    edges:
      - source: sub:openbci
        target: select
      - source: select
        target: peaks
      - source: peaks
        target: display
    rate: 10

  # Channel 2 DOWN detector
  - id: Out_down
    nodes:
    - id: sub
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [ openbci ]

    - id: select
      module: timeflux.nodes.query
      class: LocQuery
      params:
        key: [ eeg_2 ]
        axis: 1

    - id: peaks
      module: timeflux_dsp.nodes.peaks
      class: LocalDetect
      params:
        delta: 100
        tol: 0.5

    - id: display
      module: timeflux.nodes.debug
      class: Display
    edges:
      - source: sub:openbci
        target: select
      - source: select
        target: peaks
      - source: peaks
        target: display
    rate: 10

  # Channel 3 LEFT detector
  - id: Out_left
    nodes:
    - id: sub
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [ openbci ]

    - id: select
      module: timeflux.nodes.query
      class: LocQuery
      params:
        key: [ eeg_3 ]
        axis: 1

    - id: peaks
      module: timeflux_dsp.nodes.peaks
      class: LocalDetect
      params:
        delta: 100
        tol: 0.5

    - id: display
      module: timeflux.nodes.debug
      class: Display
    edges:
      - source: sub:openbci
        target: select
      - source: select
        target: peaks
      - source: peaks
        target: display
    rate: 10

  # Channel 4 RIGHT detector
  - id: Out_right
    nodes:
    - id: sub
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [ openbci ]

    - id: select
      module: timeflux.nodes.query
      class: LocQuery
      params:
        key: [ eeg_4 ]
        axis: 1

    - id: peaks
      module: timeflux_dsp.nodes.peaks
      class: LocalDetect
      params:
        delta: 100
        tol: 0.5

    - id: display
      module: timeflux.nodes.debug
      class: Display
    edges:
      - source: sub:openbci
        target: select
      - source: select
        target: peaks
      - source: peaks
        target: display
    rate: 10
